PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data file delimiter = comma
  Experiment info = {'participant': '0'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 2
  Show mouse = True
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1680, 1050]
  blendMode = nofbo
  color = -0.7804, -0.7804, -0.7804
  expName = pilot_sequence_learning
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine startup_settings
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    CodeComponent functions_imports
      Code Type = Auto->JS
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      Begin Experiment:
        # log function that saves variables to log file
        def log(*msgs, sep=' ', end='\n'):
            log_file = u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'] + '_print.log')
            print(*msgs, sep=sep, end=end, flush=True)

            # Append to log file
            with open(log_file, 'a') as f:
                f.write(sep.join(str(msg) for msg in msgs) + end)

         # import meg_trigger package
        import meg_triggers
        from meg_triggers import send_trigger
        meg_triggers.enable_printing()
        meg_triggers.set_default_duration(0.005)

        # function for setting triggers when comps appear
        def send_onset_trigger(stim, trig_number):
            # record exact onset on the global clock
            win.timeOnFlip(stim, 'tStartRefresh')
            log(f'{stim}.started')
            send_trigger(trig_number)

        from ast import literal_eval

        # define function that matches position keywords to tuples
        def resolve_pos(val):
            """Return a (x,y) tuple from various spreadsheet formats."""
            # Already a tuple/list/ndarray -> normalize to tuple
            if isinstance(val, (list, tuple, np.ndarray)):
                return tuple(val)
            # Name like "left_pos" -> look up
            if isinstance(val, str):
                name = val.strip()
                if name in POS:
                    return POS[name]
                # Or literal like "(-0.4, 0.2)" in the cell
                try:
                    parsed = literal_eval(name)
                    if isinstance(parsed, (list, tuple)) and len(parsed) == 2:
                        return tuple(parsed)
                except Exception:
                    pass
                raise ValueError(f"Unrecognized position value: {val!r}")
            raise TypeError(f"Unsupported position type: {type(val)}")
    CodeComponent exp_settings
      Code Type = Auto->JS
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      Begin Experiment:
        ## set main experimental variables

        # instruction language
        language = "english" # "german" or "english"

        # pos of images (x-coord, y-coord)
        left_pos   = (-0.4, 0.2)
        right_pos  = (0.4, 0.2)
        center_pos = (0.0, 0.2)
        prompt_pos = (0, -0.2)

        # # Map positions to keys
        pos_to_key = {
            right_pos: 'r',
            center_pos: 'y',
            left_pos: 'b',
        }
        # pos of instructions
        instruc_pos = (0,0)

        # make coordinates her match with position description in excel file
        POS = {
            'left':   left_pos,
            'center': center_pos,
            'right':  right_pos,
        }

         # timings
        max_response_time = 10 # [s]

         # feedback
        feedback_steps  =  0.04   # steps out of 1
        rest_jump       =  0.004 # abs distance to target pos
        animation_time   = 2.5    # [s]

        # breaks (indicate after whch trial number you want to break)
        break_points = {60, 120, 180}
    CodeComponent bids_logging_functions
      Code Type = Auto->JS
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      Begin Experiment:
        # --- BIDS event logger (no Builder BIDS components needed) ---
        from pathlib import Path
        import csv
        import numpy as np

        class BIDSLogger:
            def __init__(self, win, clock, default_cols=None):
                self.win = win
                self.clock = clock
                self.rows = []          # list of dicts -> will become events.tsv
                self.active = {}        # stim -> row index (for duration)
                self.defaults = default_cols or {}

                # fixed column order (add any you want to see in the TSV)
                self.col_order = [
                    "stim_label", "onset", "duration",
                    "subject", "session",
                    "trial_type", "concept_label",
                    "concept_examplar",
                    "response_time", "response",
                    "expected_response",
                    "correct", "feedback_time",
                ]

            # schedule logging of onset on the *next* flip (exactly when the stim appears)
            def schedule_onset(self, stim, trial_type, stim_label=None, **extra_cols):
                def _on_flip():
                    t = self.clock.getTime()
                    row = {"onset": float(t), "duration": np.nan,
                           "trial_type": trial_type, "stim_label": stim_label}
                    row.update(self.defaults)
                    row.update(extra_cols)
                    self.rows.append(row)
                    self.active[stim] = len(self.rows) - 1
                self.win.callOnFlip(_on_flip)

            # log a one-shot event right now (no duration), e.g., button press
            def add_instant(self, trial_type, **extra_cols):
                row = {"onset": float(self.clock.getTime()), "duration": 0.0,
                       "trial_type": trial_type}
                row.update(self.defaults)
                row.update(extra_cols)
                self.rows.append(row)

            # write out a BIDS-like events.tsv
            def save(self, filename_base):
                out = Path(filename_base).with_suffix("")  # strip .csv/.log if present
                out = out.parent / (out.name + "_events.tsv")

                # union of all keys, but keep preferred order first
                all_keys = list(self.col_order)
                for r in self.rows:
                    for k in r.keys():
                        if k not in all_keys:
                            all_keys.append(k)

                with open(out, "w", newline="", encoding="utf-8") as f:
                    w = csv.DictWriter(f, fieldnames=all_keys, delimiter="\t", extrasaction="ignore")
                    w.writeheader()
                    for r in self.rows:
                        # convert Nones to "n/a" for BIDS friendliness
                        out_row = {k: ("n/a" if (r.get(k) is None or (isinstance(r.get(k), float) and np.isnan(r.get(k)))) else r.get(k))
                                   for k in all_keys}
                        w.writerow(out_row)

                return str(out)
        # set global clock as default because we need it for timing
        bids = None
      Begin Routine:
        # ---- Create the logger once ----
        bids = BIDSLogger(
            win=win,
            clock=globalClock,
            default_cols=dict(
                subject=expInfo.get("participant"),
                condition="learning"
            )
        )
  Routine choice_display
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    CodeComponent bids_choice_disp
      Code Type = Auto->JS
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      Begin Routine:
        ## schedule bids trigger setting
        bids.schedule_onset(instructions_choose, trial_type="learning",
        stim_label="instruction_choose")

        bids.schedule_onset(prompt, trial_type="learning",
        stim_label="prompt_current_choice",
        concept_label = promptFile.partition("//")[0],
        concept_examplar = promptFile.partition("//")[2])

        bids.schedule_onset(correct, trial_type="learning",
        stim_label="choice_options_correct",
        concept_label = correctFile.partition("//")[0],
        concept_examplar = correctFile.partition("//")[2])

        bids.schedule_onset(dist_01, trial_type="learning",
        stim_label="choice_options_dist_01",
        concept_label = dist_01File.partition("//")[0],
        concept_examplar = dist_01File.partition("//")[2])

        bids.schedule_onset(dist_02, trial_type="learning",
        stim_label="choice_options_dist_02",
        concept_label = dist_02File.partition("//")[0],
        concept_examplar = dist_02File.partition("//")[2])
      End Routine:
        # response neeeds to be saved at end of trial
        bids.add_instant(
            "button",
            response=(key_resp.keys if key_resp.keys else None),
            response_time=(key_resp.rt if hasattr(key_resp, "rt") else None),
            correct=(key_resp.corr if hasattr(key_resp, "corr") else None),
            expected_response = correct_ans
        )
    CodeComponent trigger_choice_disp
      Code Type = Auto->JS
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      Each Frame:
        # prompt triggering
        if prompt.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(prompt, promptTrig)

        # dist01 triggering
        if dist_01.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(dist_01, dist_01Trig)

        # dist02 triggering
        if dist_02.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(dist_02, dist_02Trig)

        # correct triggering
        if correct.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(correct, correctTrig)

        # "choose prompt" triggering
        if instructions_choose.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
            send_onset_trigger(instructions_choose, 32)
    ImageComponent prompt
      image [set every repeat] = $'stimuli\\' + promptFile
      pos [set every repeat] = prompt_pos
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01
      image [set every repeat] = $'stimuli\\' + dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02
      image [set every repeat] = $'stimuli\\' + dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent correct
      image [set every repeat] = $'stimuli\\' + correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'y', 'g', 'b', 'r'
      correctAns = $correct_ans
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_response_time
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # determine which one is correct response on this trial
        # might need later
        correctAnsKey = pos_to_key[resolve_pos(correct_pos)]

        # start a clock to time out routine if necessary
        routClock = core.Clock()
        routClock.reset()

        # initialize
        responded = False
        key_resp.keys = []
        key_resp.rt = None

        # this attribute needs to also exist otherwise there is error
        key_resp.duration = None
      Each Frame:
        # timeout case
        if routClock.getTime() >= max_response_time:
            # no key was pressed in time
            key_resp.keys = None
            key_resp.rt = None
            responded = False
            continueRoutine = False
            # (optionally store that it was a timeout)
            thisExp.addData('timeout', True)

        # if there is key selection
        if key_resp.status == STARTED:
            theseKeys = key_resp.getKeys(keyList=['y','g','b','r'], ignoreKeys=["escape"], waitRelease=True)
            if len(theseKeys):
                key_resp.keys     = theseKeys[0].name
                key_resp.rt       = theseKeys[0].rt
                key_resp.duration = theseKeys[0].duration  # safe to save later
                key_resp.corr = 1 if key_resp.keys == correctAnsKey else 0
                responded = True
                continueRoutine = False
    TextComponent instructions_choose
      letterHeight = 0.05
      pos = instruc_pos
      startVal [time (s)] = 0.0
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    CodeComponent instructions_choose_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_choose.text = (
            "Choose the next image in the sequence!")

        if language == "german":
            instructions_choose.text = (
            "Wähle das nächste Bild in der Sequenz!")
  Routine feedback
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    CodeComponent bids_feedback_disp
      Code Type = Auto->JS
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      Begin Routine:
        ## schedule bids trigger setting
        bids.schedule_onset(correct_2, trial_type="learning",
        stim_label="correct_move_start")
      End Routine:
        bids.add_instant(
            "feedback",
            feedback_duration = animationTimer,
        )
    CodeComponent animation_control
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]    # end y-coor of moving image
        endX = prompt_pos[0]    # end x-coord of moving image

        maxAnimationDur = int(round(animation_time * expInfo['frameRate']))
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1

            # Current position
            current_x, current_y = correct_2.pos

            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y

            # Move a small fraction toward target
            move_fraction = feedback_steps # % of the remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction

            # Update position
            correct_2.setPos((new_x, new_y))

            # Stop when close enough to target
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
            # if (abs(dx) < rest_jump and abs(dy) < rest_jump):
                correct_2.setPos((endX, endY))
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    CodeComponent trigger_feedback_disp
      Code Type = Auto->JS
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      Begin Routine:
        feedback.trigger_sent = False
      Each Frame:
        # feedback onset
        if moveCorrect and not feedback.trigger_sent:
            send_trigger(98)
            feedback.trigger_sent = True

        # feedback offset
        if animationDone:
            send_trigger(99)
    ImageComponent prompt_2
      image [set every repeat] = $'stimuli\\'  + promptFile
      pos [set every repeat] = prompt_pos
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_2
      image [set every repeat] = $'stimuli\\' + dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_2
      image [set every repeat] = $'stimuli\\'  + dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent correct_2
      image [set every repeat] = $'stimuli\\'  + correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine instructions
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    CodeComponent bids_instruc
      Code Type = Auto->JS
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      Begin Routine:
        ## schedule bids trigger setting
        bids.schedule_onset(instruction_part1, trial_type="learning",
        stim_label="instruction_01")
    CodeComponent trigger_start
      Code Type = Auto->JS
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      Begin Experiment:
        # set trigger that exp has started
        send_trigger(255)
    TextComponent instruction_part1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part1_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part1.text = (
            "Welcome to the second part of the experiment. "
            "You will now learn 3 sequences of images by moving through them, one pair at a time. "
            "Press any button to continue."
        )



        if language == "german":
            instruction_part1.text = ("Willkommen zum zweiten Teil des Experiments. "
            "Sie werden nun drei Bildsequenzen lernen. "
            "Sie werden die Sequenzen erleben, indem Sie sie durchlaufen und von einem Bild zum nächsten springen. "
            "Drücken Sie irgendeinen Knopf, um weiterzumachen. ")
    KeyboardComponent continue_button
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_02
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    CodeComponent bids_instruc_2
      Code Type = Auto->JS
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      Begin Routine:
        ## schedule bids trigger setting
        bids.schedule_onset(instruction_part2, trial_type="learning",
        stim_label="instruction_02")
    TextComponent instruction_part2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instructions_part2_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part2.text = (
            "Starting at the first image, choose the next image in the sequence by trial and error. "
            "After each choice, you’ll get feedback: the correct next image will move down and replace the current one. "
            "Then you choose again. "
            "Press any button to continue. "

            )


        if language == "german":
            instruction_part2.text = (
            "Sie beginnen nun am Anfang der ersten Sequenz und sollten durch Ausprobieren das nächste Bild in der Sequenz auswählen. "
            "Sie erhalten Feedback zu Ihrer Auswahl, da das richtige nächste Bild das erste Bild ersetzt. "
            "Dann treffen Sie die nächste Auswahl. "
            "Drücken Sie irgendeinen Knopf, um weiterzumachen."
            )
    KeyboardComponent continue_button_2
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine instructions_end
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    TextComponent instruction_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instructions_end_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
                "This was the experiment. Thank you for your participation! "
                "Press any button to end the task. "
            )



        if language == "german":
            instruction_part3.text = (
                "Hiermit ist das Experiment beendet. Vielen Dank für Ihre Teilnahme. "
                "Drücken Sie irgendeinen Knopf, um das Experiment zu beenden. "
            )
    KeyboardComponent continue_button_3
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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    CodeComponent trigger_end
      Code Type = Auto->JS
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      End Experiment:
        # set trigger that exp has ended
        send_trigger(255)
  BidsExportRoutine bidsExport
    add_code = False
    add_environment = True
    add_stimuli = True
    data_type = meg
    dataset_name = bids
    generate_hed_metadata = False
    runs = True
  Routine bids_export
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    CodeComponent save_tsv
      Code Type = Auto->JS
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      End Experiment:
        events_path = bids.save(thisExp.dataFileName)  # writes ..._events.tsv
        print(f"BIDS events written to: {events_path}")
  Routine bids_triggers
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  Routine instructions_03
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    CodeComponent bids_instruc_3
      Code Type = Auto->JS
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      Begin Routine:
        ## schedule bids trigger setting
        bids.schedule_onset(instruction_part3, trial_type="learning",
        stim_label="instruction_03")
    TextComponent instruction_part3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part3_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part3.text = (
            "We will start with a few practice trials. "
            "The current image appears at the bottom of the screen, and three options appear at the top. "
            "Choose the image you think comes next in the sequence. "
            "Press any key to start the practice trials."
            )



        if language == "german":
            instruction_part3.text = (
                "Wir beginnen mit einigen Übungsdurchgängen. "
                "Unten auf dem Bildschirm sehen Sie das aktuelle Bild, oben drei Auswahlmöglichkeiten. "
                "Wählen Sie das Bild, von dem Sie denken, dass es als Nächstes in der Abfolge kommt. "
                "Drücken Sie irgendeinen Knopf, um mit den Übungsdurchgängen zu beginnen."
            )
    KeyboardComponent continue_button_4
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine choice_disp_learn
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    ImageComponent prompt_prc
      image [set every repeat] = $'stimuli\\practice_images\\' + promptFile
      pos [set every repeat] = prompt_pos
      size = (0.3,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc
      image [set every repeat] = $'stimuli\\practice_images\\' + dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.3,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc
      image [set every repeat] = $'stimuli\\practice_images\\' + dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.3,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc
      image [set every repeat] = $'stimuli\\practice_images\\' + correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.3,0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_prc
      allowedKeys = 'y', 'g', 'b', 'r'
      correctAns = $correct_ans
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = max_response_time
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code_prc
      Code Type = Auto->JS
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      Begin Routine:
        # initialize
        responded = False
        key_resp_prc.keys = []
        key_resp_prc.rt = None

        # this attribute needs to also exist otherwise there is error
        key_resp_prc.duration = None

        # start a clock to time out routine if necessary
        routClock = core.Clock()
        routClock.reset()
      Each Frame:
        # timeout case
        if routClock.getTime() >= max_response_time:
            # no key was pressed in time
            key_resp_prc.keys = None
            key_resp_prc.rt = None
            responded = False
            continueRoutine = False
            # (optionally store that it was a timeout)
            #thisExp.addData('timeout', True)

        # if there is key selection
        if key_resp_prc.status == STARTED:
            theseKeys = key_resp_prc.getKeys(keyList=['y','g','b','r'], ignoreKeys=["escape"], waitRelease=True)
            if len(theseKeys):
                key_resp_prc.keys     = theseKeys[0].name
                key_resp_prc.rt       = theseKeys[0].rt
                key_resp_prc.duration = theseKeys[0].duration  # safe to save later
                key_resp_prc.corr = 1 if key_resp_prc.keys == correctAnsKey else 0
                responded = True
                continueRoutine = False
    TextComponent instructions_choose_prc
      letterHeight = 0.05
      pos = instruc_pos
      startVal [time (s)] = 0.0
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    CodeComponent instructions_choose_txt_prc
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instructions_choose_prc.text = (
            "Choose the next image in the sequence!")

        if language == "german":
            instructions_choose_prc.text = (
            "Wähle das nächste Bild in der Sequenz!")
  Routine feedback_learn
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    CodeComponent animation_control_prc
      Code Type = Auto->JS
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      Begin Routine:
        # Initialize animation control
        endY = prompt_pos[1]    # end y-coor of moving image
        endX = prompt_pos[0]    # end x-coord of moving image

        maxAnimationDur = int(round(animation_time * expInfo['frameRate']))
        animationTimer = 0      # initialize variable
        animationDone = False   # initialize variable
        moveCorrect = False     # initialize variable
      Each Frame:
        # Start animation
        if not moveCorrect and not animationDone:
            moveCorrect = True

        # Run animation
        if moveCorrect and not animationDone:
            animationTimer += 1

            # Current position
            current_x, current_y = correct_prc_2.pos

            # Compute direction toward target
            dx = endX - current_x
            dy = endY - current_y

            # Move a small fraction toward target
            move_fraction = feedback_steps # % of the remaining distance each frame
            new_x = current_x + dx * move_fraction
            new_y = current_y + dy * move_fraction

            # Update position
            correct_prc_2.setPos((new_x, new_y))

            # Stop when close enough to target
            if (abs(dx) < rest_jump and abs(dy) < rest_jump) or animationTimer > maxAnimationDur:
            # if (abs(dx) < rest_jump and abs(dy) < rest_jump):
                correct_prc_2.setPos((endX, endY))
                animationDone = True
                moveCorrect = False
                continueRoutine = False
    ImageComponent prompt_prc_2
      image [set every repeat] = $'stimuli\\practice_images\\' + promptFile
      pos [set every repeat] = prompt_pos
      size = (0.3,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_01_prc_2
      image [set every repeat] = $'stimuli\\practice_images\\' + dist_01File
      pos [set every repeat] = resolve_pos(dist01_pos)
      size = (0.3,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent dist_02_prc_2
      image [set every repeat] = $'stimuli\\practice_images\\' + dist_02File
      pos [set every repeat] = resolve_pos(dist02_pos)
      size = (0.3,0.2)
      startVal [time (s)] = 0.0
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    ImageComponent correct_prc_2
      image [set every repeat] = $'stimuli\\practice_images\\' + correctFile
      pos [set every repeat] = resolve_pos(correct_pos)
      size = (0.3,0.2)
      startVal [time (s)] = 0.0
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  Routine instructions_start
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    CodeComponent bids_instruc_4
      Code Type = Auto->JS
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      Begin Routine:
        ## schedule bids trigger setting
        bids.schedule_onset(instruction_part4, trial_type="learning",
        stim_label="instruction_start")
    TextComponent instruction_part4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent instruction_part4_text
      Code Type = Auto->JS
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      Begin Routine:
        if language == "english":
            instruction_part4.text = (
            "This is the end of the practice trials. Now the "
            "experiment starts. Remember to choose the next image in the "
            "sequence out of the three options. Try to remember the correct orders. "
            "Press any button to continue."
            )



        if language == "german":
            instruction_part4.text = (
            "Das ist das Ende der Übungsdurchgänge. Jetzt beginnt "
            "das Experiment. Denken Sie daran, das nächste Bild in der "
            "Abfolge aus den drei Optionen auszuwählen. Versuchen Sie, sich die richtige Reihenfolge zu merken. "
            "Drücken Sie eine beliebige Taste, um fortzufahren."
        )
    KeyboardComponent continue_button_5
      allowedKeys = 'y', 'g', 'b', 'r'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 0.0
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  Routine task_break
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    CodeComponent definition_breaks
      Code Type = Auto->JS
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      Begin Routine:
        # only break at the break points, otherwise don't continue this routine
        continueRoutine = (trials.thisN in break_points)
    TextComponent breaks_instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = break_dur
      text = break, the task will continue soon
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Flow
  Routine startup_settings
  Routine instructions
  Routine instructions_02
  Routine instructions_03
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = sequences/main_trials_prc.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'promptFile': 'anchor.jpg', 'correctFile': 'cow.jpg', 'dist_01File': 'bread.jpg', 'dist_02File': 'plane.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'correct_ans': 'g'},
      {'promptFile': 'cow.jpg', 'correctFile': 'ant.jpg', 'dist_01File': 'banana.jpg', 'dist_02File': 'glasses.jpg', 'correct_pos': 'left', 'dist01_pos': 'right', 'dist02_pos': 'center', 'correct_ans': 'y'},
      {'promptFile': 'ant.jpg', 'correctFile': 'basket.jpg', 'dist_01File': 'axe.jpg', 'dist_02File': 'duck.jpg', 'correct_pos': 'center', 'dist01_pos': 'left', 'dist02_pos': 'right', 'correct_ans': 'r'},
      {'promptFile': 'basket.jpg', 'correctFile': 'bed.jpg', 'dist_01File': 'belt.jpg', 'dist_02File': 'bread.jpg', 'correct_pos': 'center', 'dist01_pos': 'right', 'dist02_pos': 'left', 'correct_ans': 'r'},
      {'promptFile': 'bed.jpg', 'correctFile': 'belt.jpg', 'dist_01File': 'anchor.jpg', 'dist_02File': 'desk.jpg', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'correct_ans': 'y'},
      {'promptFile': 'belt.jpg', 'correctFile': 'bird.jpg', 'dist_01File': 'ant.jpg', 'dist_02File': 'crocodile.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'correct_ans': 'g'},
      {'promptFile': 'bird.jpg', 'correctFile': 'axe.jpg', 'dist_01File': 'banana.jpg', 'dist_02File': 'baby_stroller.jpg', 'correct_pos': 'center', 'dist01_pos': 'left', 'dist02_pos': 'right', 'correct_ans': 'r'}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
    Routine choice_disp_learn
    Routine feedback_learn
  LoopTerminator practice_trials
  Routine instructions_start
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    conditions:
      [{'promptFile': 'plane//plane_36.jpg', 'correctFile': 'car//car_13.jpg', 'dist_01File': 'house//house_29.jpg', 'dist_02File': 'bike//bike_32.jpg', 'correct_pos': 'center', 'dist01_pos': 'left', 'dist02_pos': 'right', 'promptTrig': 20, 'correctTrig': 6, 'dist_01Trig': 14, 'dist_02Trig': 2, 'correct_ans': 'b', 'learningSeq': 'A', 'currPosInSeq': 1, 'dist02SourceSeq': 'B'},
      {'promptFile': 'car//car_13.jpg', 'correctFile': 'jacket//jacket_35.jpg', 'dist_01File': 'milk//milk_38.jpg', 'dist_02File': 'box//box_16.jpg', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'promptTrig': 6, 'correctTrig': 15, 'dist_01Trig': 16, 'dist_02Trig': 4, 'correct_ans': 'g', 'learningSeq': 'A', 'currPosInSeq': 2, 'dist02SourceSeq': 'C'},
      {'promptFile': 'jacket//jacket_35.jpg', 'correctFile': 'bug//bug_27.jpg', 'dist_01File': 'milk//milk_38.jpg', 'dist_02File': 'bike//bike_36.jpg', 'correct_pos': 'left', 'dist01_pos': 'center', 'dist02_pos': 'right', 'promptTrig': 15, 'correctTrig': 5, 'dist_01Trig': 16, 'dist_02Trig': 2, 'correct_ans': 'g', 'learningSeq': 'A', 'currPosInSeq': 3, 'dist02SourceSeq': 'B'},
      {'promptFile': 'bug//bug_27.jpg', 'correctFile': 'fish//fish_15.jpg', 'dist_01File': 'house//house_29.jpg', 'dist_02File': 'pencil//pencil_08.jpg', 'correct_pos': 'right', 'dist01_pos': 'left', 'dist02_pos': 'center', 'promptTrig': 5, 'correctTrig': 10, 'dist_01Trig': 14, 'dist_02Trig': 17, 'correct_ans': 'r', 'learningSeq': 'A', 'currPosInSeq': 4, 'dist02SourceSeq': 'C'}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
    conditionsFile:
      $"sequences\\" + "main_conditions_" + str(expInfo['participant']).zfill(2) + ".xlsx"
    Routine choice_display
    Routine feedback
    Routine task_break
  LoopTerminator trials
  Routine instructions_end
  Routine bids_export
